PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 1200]
  expName = illustrations_vigilance1
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Routines
  Routine start
    TextComponent txt_start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Starting ...
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    CodeComponent code_start
      Code Type = Auto->JS
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      Before Experiment:
        import  trigger_notification_illustrations
      Begin Routine:
        trigger_notification_illustrations.trigger_notification_randomly_threaded(expInfo['participant'], expInfo['session'], globalClock)
  Routine task
    MouseComponent track_click
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
      timeRelativeTo = experiment
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    ImageComponent i1
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.625
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    ImageComponent i2
      image = img/100x100.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.625
      stopVal [duration (s)] = 0.625
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    ImageComponent i3
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.625
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    ImageComponent i4
      image = img/100x100.png
      size = (0.5, 0.5)
      startVal [time (s)] = 1.875
      stopVal [duration (s)] = 0.625
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    ImageComponent i5
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.625
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    ImageComponent i6
      image = img/76x100.png
      size = (0.5, 0.5)
      startVal [time (s)] = 3.125
      stopVal [duration (s)] = 0.625
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    ImageComponent i7
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 3.75
      stopVal [duration (s)] = 0.625
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    ImageComponent i8
      image = img/100x100.png
      size = (0.5, 0.5)
      startVal [time (s)] = 4.375
      stopVal [duration (s)] = 0.625
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    ImageComponent i9
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.625
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    ImageComponent i10
      image = img/100x100.png
      size = (0.5, 0.5)
      startVal [time (s)] = 5.625
      stopVal [duration (s)] = 0.625
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    ImageComponent i11
      image = img/100x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 6.25
      stopVal [duration (s)] = 0.625
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    ImageComponent i12
      image = img/100x100.png
      size = (0.5, 0.5)
      startVal [time (s)] = 6.875
      stopVal [duration (s)] = 0.625
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    ImageComponent i13
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.625
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
    ImageComponent i17
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.625
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
    ImageComponent i25
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.625
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
    ImageComponent i33
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.625
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
    ImageComponent i41
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 0.625
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
    ImageComponent i49
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 0.625
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
    ImageComponent i57
      image = img/76x76.png
      size = (0.5, 0.5)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 0.625
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
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trigger_notification_illustrations.log_timing_threaded(expInfo['participant'], expInfo['session'], trials.thisRepN, globalClock.getTime(), win.getFutureFlipTime(clock=None))
  Routine end
    TextComponent txt_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Stop
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine task
  LoopTerminator trials
  Routine end
