PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s/%s_%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [3840, 1200]
  expName = illustrations_vigilance2
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Routines
  Routine start
    CodeComponent code_start
      Code Type = Auto->JS
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      Before Experiment:
        import  trigger_notification_illustrations
        import stimuli_generation
      Begin Experiment:
        stimuli_generation.generate_new_stimuli_csv('stimuli/stimuli_data2.csv')
      Begin Routine:
        trigger_notification_illustrations.trigger_notification_randomly_threaded(expInfo['participant'], expInfo['session'], globalClock)
      End Routine:
        trigger_notification_illustrations.log_timing_threaded(expInfo['participant'], expInfo['session'], -1, globalClock.getTime(), win.getFutureFlipTime(clock=None))
    TextComponent txt_start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Starting ...
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  Routine end
    TextComponent txt_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Stopping ...
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  Routine task
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        timing_info = ''
        image_mapping = {'1': 'img/76x76.png',  '2':'img/100x100.png',  '3':'img/100x76.png', '4':'img/76x100.png'}
      Begin Routine:
        timing_info = timing_info + '{},{},{}\n'.format(trials.thisRepN, globalClock.getTime(),  win.getFutureFlipTime(clock=None))
      End Experiment:
        trigger_notification_illustrations.cancel_notification_trigger()
        trigger_notification_illustrations.log_all_timing(expInfo['participant'], expInfo['session'], timing_info)
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .625
      syncScreenRefresh = True
      timeRelativeTo = experiment
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    ImageComponent im
      image [set every repeat] = $image_mapping[str($image_id)]
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.625
      units = cm
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/stimuli_data2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimuli_id', 1), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 2), ('image_id', 3)]),
      OrderedDict([('stimuli_id', 3), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 4), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 5), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 6), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 7), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 8), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 9), ('image_id', 3)]),
      OrderedDict([('stimuli_id', 10), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 11), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 12), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 13), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 14), ('image_id', 4)]),
      OrderedDict([('stimuli_id', 15), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 16), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 17), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 18), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 19), ('image_id', 4)]),
      OrderedDict([('stimuli_id', 20), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 21), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 22), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 23), ('image_id', 3)]),
      OrderedDict([('stimuli_id', 24), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 25), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 26), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 27), ('image_id', 4)]),
      OrderedDict([('stimuli_id', 28), ('image_id', 2)]),
      OrderedDict([('stimuli_id', 29), ('image_id', 1)]),
      OrderedDict([('stimuli_id', 30), ('image_id', 2)])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
    Routine task
  LoopTerminator trials
  Routine end
